---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "morph21_Oliver/Morris"
set subject_parity even
set subject_nr 0
set start AB_m21
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\aalaberk\\Providence College\\Morris, Joanna A - PC_HPLAB\\PROJECTS\\MORPH21\\src\\OpenSesame"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define sequence AB_m21
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run open_port always
	run reset_counter_prep always
	run instructions_1 always
	run block1 always
	run end_screen always
	run close_port always

define sketchpad ITI
	set duration "[ITI]"
	set description "Displays stimuli"

define sketchpad blank_screen
	set duration 497
	set description "Displays stimuli"

define sketchpad blink_screen
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="(--)" x=0 y=0 z_index=0

define loop block1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 300
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target DETECTABLE
	setcycle 0 targ_type CW_S
	setcycle 0 cond_trig 201
	setcycle 0 cresp "/"
	setcycle 0 word_trig 1
	setcycle 0 ITI 300
	setcycle 1 target AVOIDABLE
	setcycle 1 targ_type CW_S
	setcycle 1 cond_trig 201
	setcycle 1 cresp "/"
	setcycle 1 word_trig 2
	setcycle 1 ITI 400
	setcycle 2 target NOTICEABLE
	setcycle 2 targ_type CW_S
	setcycle 2 cond_trig 201
	setcycle 2 cresp "/"
	setcycle 2 word_trig 3
	setcycle 2 ITI 250
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	setcycle 7 target BEARDED
	setcycle 7 targ_type CW_S
	setcycle 7 cond_trig 201
	setcycle 7 cresp "/"
	setcycle 7 word_trig 8
	setcycle 7 ITI 350
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	setcycle 14 target CAMPAIGNER
	setcycle 14 targ_type CW_S
	setcycle 14 cond_trig 201
	setcycle 14 cresp "/"
	setcycle 14 word_trig 15
	setcycle 14 ITI 200
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	setcycle 50 target PUNCHER
	setcycle 50 targ_type CW_L
	setcycle 50 cond_trig 202
	setcycle 50 cresp "/"
	setcycle 50 word_trig 1
	setcycle 50 ITI 350
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	setcycle 52 target SPELLER
	setcycle 52 targ_type CW_L
	setcycle 52 cond_trig 202
	setcycle 52 cresp "/"
	setcycle 52 word_trig 3
	setcycle 52 ITI 400
	setcycle 53 target KNOCKER
	setcycle 53 targ_type CW_L
	setcycle 53 cond_trig 202
	setcycle 53 cresp "/"
	setcycle 53 word_trig 4
	setcycle 53 ITI 300
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	setcycle 60 target DANCER
	setcycle 60 targ_type CW_L
	setcycle 60 cond_trig 202
	setcycle 60 cresp "/"
	setcycle 60 word_trig 11
	setcycle 60 ITI 250
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	setcycle 68 target SHAMEFUL
	setcycle 68 targ_type CW_L
	setcycle 68 cond_trig 202
	setcycle 68 cresp "/"
	setcycle 68 word_trig 19
	setcycle 68 ITI 200
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	setcycle 100 target MELTANCE
	setcycle 100 targ_type NW_S_COMP
	setcycle 100 cond_trig 203
	setcycle 100 cresp z
	setcycle 100 word_trig 1
	setcycle 100 ITI 200
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	setcycle 102 target LIDARY
	setcycle 102 targ_type NW_S_COMP
	setcycle 102 cond_trig 203
	setcycle 102 cresp z
	setcycle 102 word_trig 3
	setcycle 102 ITI 250
	setcycle 103 target FIGER
	setcycle 103 targ_type NW_S_COMP
	setcycle 103 cond_trig 203
	setcycle 103 cresp z
	setcycle 103 word_trig 4
	setcycle 103 ITI 300
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	setcycle 106 target ALTARIC
	setcycle 106 targ_type NW_S_COMP
	setcycle 106 cond_trig 203
	setcycle 106 cresp z
	setcycle 106 word_trig 7
	setcycle 106 ITI 400
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	setcycle 116 target PRINCEMENT
	setcycle 116 targ_type NW_S_COMP
	setcycle 116 cond_trig 203
	setcycle 116 cresp z
	setcycle 116 word_trig 17
	setcycle 116 ITI 350
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	setcycle 125 target STIRANCE
	setcycle 125 targ_type NW_L_COMP
	setcycle 125 cond_trig 204
	setcycle 125 cresp z
	setcycle 125 word_trig 1
	setcycle 125 ITI 250
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	setcycle 127 target FLITENCE
	setcycle 127 targ_type NW_L_COMP
	setcycle 127 cond_trig 204
	setcycle 127 cresp z
	setcycle 127 word_trig 3
	setcycle 127 ITI 400
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	setcycle 129 target SHEETER
	setcycle 129 targ_type NW_L_COMP
	setcycle 129 cond_trig 204
	setcycle 129 cresp z
	setcycle 129 word_trig 5
	setcycle 129 ITI 300
	setcycle 130 target GASFUL
	setcycle 130 targ_type NW_L_COMP
	setcycle 130 cond_trig 204
	setcycle 130 cresp z
	setcycle 130 word_trig 6
	setcycle 130 ITI 200
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	setcycle 132 target INKISM
	setcycle 132 targ_type NW_L_COMP
	setcycle 132 cond_trig 204
	setcycle 132 cresp z
	setcycle 132 word_trig 8
	setcycle 132 ITI 350
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	setcycle 150 target SOCKETEL
	setcycle 150 targ_type NW_S_SIMP
	setcycle 150 cond_trig 205
	setcycle 150 cresp z
	setcycle 150 word_trig 1
	setcycle 150 ITI 300
	setcycle 151 target GUMFIL
	setcycle 151 targ_type NW_S_SIMP
	setcycle 151 cond_trig 205
	setcycle 151 cresp z
	setcycle 151 word_trig 2
	setcycle 151 ITI 200
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	setcycle 153 target AIDIG
	setcycle 153 targ_type NW_S_SIMP
	setcycle 153 cond_trig 205
	setcycle 153 cresp z
	setcycle 153 word_trig 4
	setcycle 153 ITI 400
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	setcycle 175 target PRAYANGE
	setcycle 175 targ_type NW_L_SIMP
	setcycle 175 cond_trig 206
	setcycle 175 cresp z
	setcycle 175 word_trig 1
	setcycle 175 ITI 300
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	setcycle 200 target FLIRT
	setcycle 200 targ_type FILL_W
	setcycle 200 cond_trig 207
	setcycle 200 cresp "/"
	setcycle 200 word_trig 1
	setcycle 200 ITI 400
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	setcycle 250 target BAFED
	setcycle 250 targ_type FILL_NW
	setcycle 250 cond_trig 208
	setcycle 250 cresp z
	setcycle 250 word_trig 1
	setcycle 250 ITI 300
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	run sequence

define sketchpad break1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've reached the first break!<br /><br />Take a rest for as long as you'd like. <br />Call out or wave to get the experimenter if there is anything you need <br />(e.g. water, to use the restroom, etc.) <br /><br />When you are ready to resume, press the space bar. " x=0 y=0 z_index=0

define sketchpad break2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You're halfway done!<br /><br />Take a rest for as long as you'd like. <br />Call out or wave to get the experimenter if there is anything you need <br />(e.g. water, to use the restroom, etc.) <br /><br />When you are ready to resume, press the space bar. " x=0 y=0 z_index=0

define sketchpad break3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="There is one more block left!  <br /><br />Take a rest for as long as you'd like. <br />Call out or wave to get the experimenter if there is anything you need <br />(e.g. water, to use the restroom, etc.) <br /><br />When you are ready to resume, press the space bar. " x=0 y=0 z_index=0

define inline_script canvas
	set description "Executes Python code"
	___run__
	def targcanvasfxn():
		targcanvas = canvas(autoprepare=False)
		targcanvas.text(var.target, center=True)
		targcanvas.color=u"white"
		targcanvas.background_color=u"black"
		targcanvas.font_family= u"mono"
		targcanvas.font_size=18
		targcanvas.prepare()
		targcanvas.show()
		global canvastime
		canvastime = time.time(targcanvas)		
		return canvastime
	__end__
	set _prepare ""

define inline_script close_port
	set description "Executes Python code"
	___run__
	# finally, we want to make sure that the
	# connection to the serial port will be stopped
	# when the experiment is aborted or finished
	# 
	exp.cleanup_functions.append(exp.port.close)
	__end__
	set _prepare ""

define inline_script correct_trigger
	set description "Executes Python code"
	___run__
	trigger = [self.get("prime_trig")]
	
	try:
	    exp.port.write(trigger)
	    print('prime trigger has been sent',str(trigger))
	    self.sleep(10)
	    exp.port.write([0x00])
	    self.sleep(10)
	
	except:
		print('prime trigger not sent')
	__end__
	set _prepare ""

define inline_script def_chain
	set description "Executes Python code"
	___run__
	items["target_present"].run = chain(items["target_present"].run, cond_trigger())
	__end__
	___prepare__
	def chain(*functions): 
		return lambda: [f() for f in functions]
	
	def cond_trigger():
		global io
		trigger = self.get("cond_trig")
		port = 0x1FF0
		try:
			io.DlPortWritePortUchar(port, trigger)
		except:
			print 'failed to send trigger' 
		global condtrigtime
		condtrigtime =  self.time()
	__end__

define sketchpad end_screen
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've finished the experiment! <br /><br />Please wait for the experimenter to come in. <br /><br />Thank you! " x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 497
	set description "Displays stimuli"
	draw line color=white penwidth=1 show_if=always x1=0 x2=0 y1=21 y2=-21 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-21 x2=21 y1=0 y2=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script inc_counter
	set description "Executes Python code"
	___run__
	exp.set("counter", exp.get("counter")+1)
	__end__
	set _prepare ""

define inline_script incorrect_trigger
	set description "Executes Python code"
	___run__
	trigger = [self.get("word_trig")]
	
	try:
	    exp.port.write(trigger)
	    print('word trigger has been sent',str(trigger))
	    self.sleep(10)
	    exp.port.write([0x00])
	    self.sleep(10)
	
	except:
		print('word trigger not sent')
	__end__
	set _prepare ""

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome! <br /><br />In this experiment, you will be shown words in the center of the screen. <br /><br />Your task is to decide whether the word shown is a *real word* or a *nonreal word.* <br /><br />After the word has displayed, you should respond by pressing the TOP button on the joystick for a REAL word, <br /><br />or the BOTTOM button for a NONREAL word. <br /><br />After every three words, there will be a symbol displayed on the screen that looks like this: <br /><br />(--) <br /><br />which indicates that this is an optimal time for you to blink. <br /><br />If that is not displaying, please try your best to avoid blinking or moving around. <br /><br />After each block of 75 words, you will have self-timed breaks to rest. In total, there will be 4 blocks. At the end, please wait for the experimenter to come in. <br /><br />Please wave or call out to the experimenters during this time if there is anything you need. <br /><br />Thank you! <br /><br />" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	log target
	log targ_type
	log cresp
	log condtrigtime

define inline_script logscript
	set description "Executes Python code"
	___run__
	log.write_vars(var.condtrigtime)
	log.write_vars(var.wordtrigtime)
	log.write_vars(var.canvastime)
	__end__
	set _prepare ""

define coroutines new_coroutines
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 1000
	set description "Run items simultaneously"

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	trigger = [self.get("cond_trig")]
	
	try:
	    exp.port.write(trigger)
	    print('cond trigger has been sent',str(trigger))
	    self.sleep(10)
	    exp.port.write([0x00])
	    self.sleep(10)
	
	except:
		print('cond trigger not sent')
	__end__
	set _prepare ""

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
	trigger = [self.get("targ_type")]
	
	try:
	    exp.port.write(trigger)
	    print('targ type has been sent',str(trigger))
	    self.sleep(10)
	    exp.port.write([0x00])
	    self.sleep(10)
	
	except:
		print('targ type is not sent')
	__end__
	set _prepare ""

define keyboard_response new_keyboard_response_1
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[cresp]"
	set allowed_responses "z;/"

define inline_script open_port
	set description "Executes Python code"
	set _run ""
	___prepare__
	# we will need to import the 'serial' module,
	# which allows us to send and receive
	# information via the serial port
	try:
	    import serial
	    exp.port = serial.Serial('COM4',  baudrate=115200, bytesize=serial.EIGHTBITS, parity=serial.PARITY_NONE,  stopbits=serial.STOPBITS_ONE,timeout=1)
	    exp.port.write([0x00])
	    self.sleep(10)
	    
	    print('serial port read', exp.port.baudrate, exp.port.bytesize, exp.port.parity)
	except: 
		print('serial port not read')
	 # next, we will need to start a connection to
	# the serial port
	
	# finally, we want to make sure that the
	# connection to the serial port will be stopped
	# when the experiment is aborted or finished
	exp.cleanup_functions.append(exp.port.close)
	__end__

define inline_script reset_counter_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	exp.set("counter", 0)
	__end__

define inline_script reset_counter_run
	set description "Executes Python code"
	___run__
	exp.set('counter',0) 
	__end__
	set _prepare ""

define inline_script response_trigger_trial
	set description "Executes Python code"
	___run__
	print('response',self.get("response"),'cresp',self.get("cresp"))
	try:
	    if int(self.get("response")) == int(self.get("cresp")):
	        trigger = [0xDC]
	    else:
	        trigger = [0xDD]
	except:
	    trigger = [0XDD]
	
	try:
	        exp.port.write(trigger)
	        self.sleep(10)
	        print('response trigger has been sent', trigger)
	        exp.port.write([0x00])
	        self.sleep(10)
	
	except:
		print('response trigger not sent')
	__end__
	set _prepare ""

define sketchpad responsescreen
	set duration 600
	set description "Displays stimuli"

define sequence sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inc_counter always
	run fixation_1 always
	run blank_screen always
	run target_present always
	run new_inline_script_1 always
	run incorrect_trigger always
	run new_inline_script_2 always
	run break1 "[counter]=75"
	run break2 "[counter]=150"
	run break3_1 "[counter]=225"
	run new_keyboard_response_1 always
	run responsescreen always
	run response_trigger_trial always
	run blink_screen "[counter]%3=0"
	run ITI always
	run logger always

define sketchpad target_present
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

